PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = lexical_decision
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fix
      fillColor = white
      shape = triangle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent stim
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $stimulus
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    KeyboardComponent resp
      allowedKeys = 'z','m'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instructions
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    PolygonComponent fixation
      fillColor = white
      shape = triangle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Welcome!

        Press 'Z' if you think the item is a WORD.
        Press 'M' if you think the item is a NONWORD.

        Press "SPACE" to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Thank_you
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Thank you for your contribution!
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = word_condition.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'stimulus': 'apple', 'type': 'word', 'correct_key': 'z'},
      {'stimulus': 'river', 'type': 'word', 'correct_key': 'z'},
      {'stimulus': 'window', 'type': 'word', 'correct_key': 'z'},
      {'stimulus': 'doctor', 'type': 'word', 'correct_key': 'z'},
      {'stimulus': 'yellow', 'type': 'word', 'correct_key': 'z'},
      {'stimulus': 'market', 'type': 'word', 'correct_key': 'z'},
      {'stimulus': 'bottle', 'type': 'word', 'correct_key': 'z'},
      {'stimulus': 'garden', 'type': 'word', 'correct_key': 'z'},
      {'stimulus': 'pillow', 'type': 'word', 'correct_key': 'z'},
      {'stimulus': 'silver', 'type': 'word', 'correct_key': 'z'},
      {'stimulus': 'flirp', 'type': 'nonword', 'correct_key': 'm'},
      {'stimulus': 'drent', 'type': 'nonword', 'correct_key': 'm'},
      {'stimulus': 'plome', 'type': 'nonword', 'correct_key': 'm'},
      {'stimulus': 'snarp', 'type': 'nonword', 'correct_key': 'm'},
      {'stimulus': 'glenter', 'type': 'nonword', 'correct_key': 'm'},
      {'stimulus': 'fradge', 'type': 'nonword', 'correct_key': 'm'},
      {'stimulus': 'brantle', 'type': 'nonword', 'correct_key': 'm'},
      {'stimulus': 'smode', 'type': 'nonword', 'correct_key': 'm'},
      {'stimulus': 'trallip', 'type': 'nonword', 'correct_key': 'm'},
      {'stimulus': 'clope', 'type': 'nonword', 'correct_key': 'm'}]
    Routine trial
  LoopTerminator trials
  Routine Thank_you
