PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = orient_discrimination
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = tilt
      saveStartStop = False
      sf = 5
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'up', 'down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
            if random() > 0.5:
                tilt = randint(1, 5)
                corrAns = 'down'
            else:
                tilt = randint(-5, -1)
                corrAns = 'down'
      End Routine:
        trials.addData('tilt',tilt)
        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
  Routine Instructions_
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On each trial, a stimulus will appear briefly on the screen.



        If the stimulus is presented in a vertical orientation, press the Up Arrow (↑).


        If the stimulus is presented in a tilted orientation (slightly rotated left or right), press the Down Arrow (↓).



        Press SPACE when you are ready to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_you_
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Thank you for your contribution.
Flow
  Routine Instructions_
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
  Routine Thank_you_
