PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 800]
  expName = visual search
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent target
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos [set every repeat] = (random() - 0.5, random() - 0.5)
      startVal [time (s)] = 0.0
      text = T 
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    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
            num_distr = 10
            thisExp.addData('num_distr', num_distr)
        else:
            num_distr = 5
            thisExp.addData('num_distr', num_distr)

        distractors = []
        for i in range(num_distr):
            distr = visual.TextStim(win=win, name='distr',
                text='L',
                font='Arial',
                pos=(random()-0.5, random()-0.5), draggable=False, height=0.05, wrapWidth=None, ori=randint(1,360),
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=-2.0)
            distractors.append(distr)

        for distr in distractors:
            distr.setAutoDraw(True)
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)
  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this task, several letters will appear on the screen. Your job is to find the letter T as quickly as possible.

        If you see a T, move the cursor and click directly on it.

        Press SPACE whenever you are ready.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_you_
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for your contribution. 
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine trial
  LoopTerminator trials
  Routine Thank_you_
